PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  backgroundFit = fill
  expName = abruptvsnaturalexp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    MovieComponent video_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $path
      size = (0.89, 0.76)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
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    KeyboardComponent video_2key
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      store = all keys
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  Routine setup
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import os
        import random

        video_folder = r"C:\Users\Gargi\Desktop\Event boundary videos\Trimmed videos"
        practice_guess = "Adobe Express - FISHERMAN  2 Minute Short Film - Tomoine (1080p, h264)"

        # collect all files
        all_files = [f for f in os.listdir(video_folder) if os.path.isfile(os.path.join(video_folder, f))]

        if len(all_files) == 0:
            raise Exception("No video files found in folder: " + video_folder)

        # pick practice video
        if practice_guess in all_files:
            practice_video = practice_guess
        else:
            matches = [f for f in all_files if "fisherman" in f.lower()]
            practice_video = matches[0] if matches else all_files[0]

        # remaining movies
        movie_list = [f for f in all_files if f != practice_video]
        random.shuffle(movie_list)

        # write movies.csv
        cond_path = os.path.join(os.getcwd(), "movies.csv")
        with open(cond_path, "w", encoding="utf-8") as fh:
            fh.write("movie\n")
            for mv in movie_list:
                fh.write(mv + "\n")

        seg_data = []
        n_done = 0

        print("Setup done. Practice =", practice_video)
  Routine Instructions
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    TextComponent instruction1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will be asked to watch videos and annotate based on specific instructions.
        Press spacebar to proceed.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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      text:
        In the experiment you will watch multiple video clips of varying lengths. Press the SPACEBAR every time YOU believe a meaningful unit of activity or an event has ended and another has begun.

        Don't overthink it, go with your intuition. It is ok to miss out on a potential boundary than to mark too many segments.
        Focus on the LARGER/SIGNIFICANT shifts in the narrative than fixating on the minor details.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_session
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    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = Trimmed_videos/video_5.mp4
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 42
      units = height
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    KeyboardComponent test_key
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 34
      store = all keys
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  Routine Practice_feedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $practice_msg
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    KeyboardComponent fb_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intertrial
    RoutineSettingsComponent Intertrial
      stopVal [duration (s)] = 2.5
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    TextComponent intertrial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Next movie starting...
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    KeyboardComponent isikey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if n_done % 5 != 0:
            continueRoutine = False
    TextComponent trialbreak
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = You may take a short break. Press SPACE to continue.
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    KeyboardComponent breakkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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      text:
        Thanks for participating

        press the SPACEBAR to exit
    KeyboardComponent end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_inst
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  Routine practice_inst
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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      text:
        First, let's have a practice session to get you familiarized with the task.

        In case you provide fewer or more number of annotations, you will be asked to repeat the trial again.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine redo_trails_less
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You have pressed spacebar TOO MANY times. Please redo the trial and try identifying a less number of boundaries.
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  Routine redo_trails_more
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = You have pressed spacebar TOO FEW times. Please redo the trial and try identifying a more number of boundaries. 
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  Routine experiment
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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      text:
        Good Job! Now, let's start the experiment

        to proceed, please press the spacebar!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_code
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        lower = 1
        upper = 5
        responses = len(test_key.keys)
        print(test_key.keys)
        if test_key.keys is not None:
            print(test_key)
            if responses >= lower and responses <= upper:
                show_redoTrail_more = 0
                show_redoTrail_less = 0
                showTrails_2.finished = 1
                print("a", responses)
            elif responses < lower:
                show_redoTrail_more = 1
                show_redoTrail_less = 0
                print("b", responses)
            else:
                show_redoTrail_more = 0
                show_redoTrail_less = 1
                print("c", responses)
        else:
            show_redoTrail_more = 1
            show_redoTrail_less = 0
            print("d", responses)
Flow
  Routine Instructions
  Routine instruction_2
  Routine practice_inst
  LoopInitiator showTrails_2 loopType="TrialHandler"
    loopType = random
    nReps = 9999
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    Routine practice_session
    Routine practice_code
    LoopInitiator redoTrialsCoarse_more loopType="TrialHandler"
      loopType = random
      nReps = show_redoTrail_more
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      Routine redo_trails_more
    LoopTerminator redoTrialsCoarse_more
    LoopInitiator redoTrialsCoarse_less loopType="TrialHandler"
      loopType = random
      nReps = show_redoTrail_less
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      Routine redo_trails_less
    LoopTerminator redoTrialsCoarse_less
  LoopTerminator showTrails_2
  Routine experiment
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = movies.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_1.mp4"'), ('duration', np.int64(22))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_2.mp4"'), ('duration', np.int64(39))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_3.mp4"'), ('duration', np.int64(34))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_4.mp4"'), ('duration', np.int64(39))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_5.mp4"'), ('duration', np.int64(42))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_6.mp4"'), ('duration', np.int64(39))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_7.mp4"'), ('duration', np.int64(33))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_8.mp4"'), ('duration', np.int64(29))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_9.mp4"'), ('duration', np.int64(24))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_10.mp4"'), ('duration', np.int64(47))]),
      OrderedDict([('path', '"C:\\Users\\Gargi\\Desktop\\Event boundary videos\\Trimmed_videos\\video_11.mp4"'), ('duration', np.int64(34))])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
    Routine trial
    Routine Intertrial
  LoopTerminator trials
  Routine Thank_you
